PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = PRIYANSHI.AU2220101_solo.project
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine instruction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 3.0
      text = This is a trial task one. Press the key corresponding to the shape's position.
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  Routine trial
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    PolygonComponent fixciation
      fillColor = white
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (10, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent fixciation_2
      fillColor = white
      lineColor = 1.0000, -1.0000, -1.0000
      ori = 90
      pos = (-150, 0)
      shape = circle
      size = (100, 0)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent fixciation_3
      anchor = center-right
      fillColor = white
      lineColor = 1.0000, -1.0000, -1.0000
      ori = 90
      pos = (-50, 0)
      shape = triangle
      size = (100, 100)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent fixciation_4
      anchor = center-left
      fillColor = white
      lineColor = 1.0000, -1.0000, -1.0000
      ori = 90
      pos = (150, 0)
      shape = cross
      size = (100, 100)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent fixciation_5
      anchor = top-center
      fillColor = white
      lineColor = 1.0000, -1.0000, -1.0000
      ori = 90
      pos = (60, -150)
      shape = star7
      size = (100, 100)
      startVal [time (s)] = 1.0
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine text
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    TextComponent instruction2
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 3.0
      text = Now the second trial will start. Press the key corresponding to the shape's position.
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  Routine trial_2
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    PolygonComponent stimulus
      fillColor = white
      shape = circle
      size = (10, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent stimulus_2
      fillColor = white
      lineColor = 1.0000, -1.0000, -1.0000
      ori = 90
      pos = (-150, 10)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent stimulus_3
      anchor = bottom-right
      fillColor = white
      lineColor = 1.0000, -1.0000, -1.0000
      ori = 90
      pos = (-50, 20)
      shape = circle
      size = (100, 100)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent stimulus_4
      anchor = bottom-left
      fillColor = white
      lineColor = 1.0000, -1.0000, -1.0000
      ori = 90
      pos = (50, 30)
      shape = triangle
      size = (100, 100)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent stimulus_5
      anchor = center-left
      fillColor = white
      lineColor = 1.0000, -1.0000, -1.0000
      ori = 90
      pos = (60, -150)
      shape = cross
      size = (100, 100)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent stimulus_6
      anchor = bottom-center
      fillColor = white
      lineColor = 1.0000, -1.0000, -1.0000
      ori = 90
      pos = (150, 50)
      shape = star7
      size = (100, 100)
      startVal [time (s)] = 1.0
      units = pix
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    KeyboardComponent key_resp_2
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/PRIYANSHI/Documents/training.conditions.xlsx
    loopType = sequential
    nReps = 20
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    conditions:
      [{'pos': -50, 'corr_resp': 'a'},
      {'pos': -150, 'corr_resp': 's'},
      {'pos': 50, 'corr_resp': 'd'},
      {'pos': 150, 'corr_resp': 'f'},
      {'pos': 60, 'corr_resp': 'g'}]
    Routine trial
  LoopTerminator trials
  Routine text
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/PRIYANSHI/Documents/taining_conditions.xlsx
    loopType = fullRandom
    nReps = 20
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    conditions:
      [{'Pos': -150, 'correctKey': 'z'},
      {'Pos': -50, 'correctKey': 'x'},
      {'Pos': 50, 'correctKey': 'c'},
      {'Pos': 60, 'correctKey': 'v'},
      {'Pos': 150, 'correctKey': 'b'}]
    Routine trial_2
  LoopTerminator trials_2
